//==========================================================================
// CMD_TSK.PRO
//   Description: Loads all PRO files for CMD task
//   Author: chenchal.subraveti@vanderbilt.edu
//   Date: 2019-01-14
//==========================================================================
//  Revision History:
//
//==========================================================================
// Use variables on the fly - no declaration
#pragma declare = 1

#include C:/TEMPO/ProcLib/CMD/SET_CMD.PRO
#include C:/TEMPO/ProcLib/CMD/STATES/CMD_STAT.PRO

//==========================================================================

declare IDLE();
declare SETC_TRL();
declare PCK_TRL_TYP();

process IDLE() enabled
{
  declare int tempVar;
  declare int tempTrlNumber;
  seed1(time());
  normal(1);

  // ========== Call once =============
  //RIG_ID = 29;
  //MONK_ID = JOULE_ID;
  spawnwait SET_RIG(RIG_ID);
  spawnwait SET_CLRS();
  spawnwait SET_DEFAULT_STIM_VARS();
  spawnwait SET_MONK(MONK_ID);
  // Setup WATCHES
  spawn QUE_TTL();
  spawn WTCH_EYE();
  spawn WTCH_SCHMITT();
  spawn GRAPHS();
  spawnwait CMD_PGS();

 //  while(1)
  //{
  // spawnwait PCK_TRL_TYP();
  // printf("TRIAL_TYPE : %d\n\n\n",TRIAL_TYPE);
  // nexttick 100;
  //}
  CURR_STAT = STAT_IDLE;
  CURR_OUTCOME = O_NOT_REDY;

  while (1)
  {
    //===============For each Trial=====================
    tempTrlNumber = tempTrlNumber + 1;
    spawnwait SETC_TRL();

    //================ STATE == READY ===================
    // STATE = READY
    //when monk's eye os outside the large fix window
    TRL_NUMBER = tempTrlNumber;
    printf("Trial num %d, Target pos %d\n", TRL_NUMBER, CURR_TARGET_IDX);

    dsendf("vp %d\n", PG_FIXATION_PD);
	spawn GRAF_SHOW_FIX(GRAF_SHOW);
    nexttick 1000;
    //dsendf("VW %d\n", 2);
    //dsendf("vp %d\n", PG_BLANK);
    //dsendf("VW %d\n", 5);
    dsendf("vp %d\n", PG_TARGET_PD);
	spawn GRAF_SHOW_TARG(GRAF_SHOW);
    //dsendf("VW %d\n", 20);
    //dsendf("vp %d\n", PG_SIGNAL_PD);
    //dsendf("VW %d\n", 1);
    //dsendf("vp %d\n", PG_BLANK);
    nexttick 1000;
  }
} /* IDLE */

process PCK_TRL_TYP()
{
   declare float trlType;
   trlType = (1.0+random(9999))/100.0;
   printf("trlType %2.3d ",trlType);
   if (trlType <= GO_WEIGHT)
   {
     TRIAL_TYPE = TRIAL_TYPE_GO;
   }
   else if (trlType <= GO_WEIGHT + STOP_WEIGHT)
   {
     TRIAL_TYPE = TRIAL_TYPE_STOP;
   }
   else
   {
     TRIAL_TYPE = TRIAL_TYPE_IGNORE;
   }
 }

process SETC_TRL()
{
  declare float eccX, eccY;


  // pick current target location
  CURR_TARGET_IDX = (CURR_TARGET_IDX + 1) % N_TARG_POS;

  // Compute fix win size
  // Fix spot center is at 0,0, so we do not need to compute
  FIX_WIN[LEFT]  = -FIX_WIN_SIZE/2;
  FIX_WIN[RIGHT] = FIX_WIN_SIZE/2;
  FIX_WIN[UP]    = -FIX_WIN_SIZE/2;
  FIX_WIN[DOWN]  = FIX_WIN_SIZE/2;
  // Larger fix win - For inaccurate eye position
  FIX_WIN_LARGE[LEFT]  = -FIX_WIN_SIZE_LARGE/2;
  FIX_WIN_LARGE[RIGHT] = FIX_WIN_SIZE_LARGE/2;
  FIX_WIN_LARGE[UP]    = -FIX_WIN_SIZE_LARGE/2;
  FIX_WIN_LARGE[DOWN]  = FIX_WIN_SIZE_LARGE/2;


  // Compute TARG_WIN and TARG_WIN_LARGE
  eccX            = cos(TARG_ANGLE_ARRY[CURR_TARGET_IDX]) * TARG_ECCENTRICITY_ARRY[CURR_TARGET_IDX];
  eccY            = -sin(TARG_ANGLE_ARRY[CURR_TARGET_IDX]) * TARG_ECCENTRICITY_ARRY[CURR_TARGET_IDX];
  TARG_WIN[LEFT]  = eccX - TARG_WIN_SIZE/2;
  TARG_WIN[RIGHT] = eccX + TARG_WIN_SIZE/2;
  TARG_WIN[UP]    = eccY - TARG_WIN_SIZE/2;
  TARG_WIN[DOWN]  = eccY + TARG_WIN_SIZE/2;
  // Larger target window - For inaccurate eye position
  TARG_WIN_LARGE[LEFT]  = eccX - TARG_WIN_SIZE_LARGE/2;
  TARG_WIN_LARGE[RIGHT] = eccX + TARG_WIN_SIZE_LARGE/2;
  TARG_WIN_LARGE[UP]    = eccY - TARG_WIN_SIZE_LARGE/2;
  TARG_WIN_LARGE[DOWN]  = eccY + TARG_WIN_SIZE_LARGE/2;
  // Compute TARG_WIN_ANTI and TARG_WIN_LARGE_ANTI
  eccX                 = cos(TARG_ANGLE_ARRY[CURR_TARGET_IDX] + 180) * TARG_ECCENTRICITY_ARRY[CURR_TARGET_IDX];
  eccY                 = -sin(TARG_ANGLE_ARRY[CURR_TARGET_IDX] + 180) * TARG_ECCENTRICITY_ARRY[CURR_TARGET_IDX];
  TARG_WIN_ANTI[LEFT]  = eccX - TARG_WIN_SIZE/2;
  TARG_WIN_ANTI[RIGHT] = eccX + TARG_WIN_SIZE/2;
  TARG_WIN_ANTI[UP]    = eccY - TARG_WIN_SIZE/2;
  TARG_WIN_ANTI[DOWN]  = eccY + TARG_WIN_SIZE/2;
  // Larget ANTI target window - For inaccurate Eye position
  TARG_WIN_ANTI_LARGE[LEFT]  = eccX - TARG_WIN_SIZE_LARGE/2;
  TARG_WIN_ANTI_LARGE[RIGHT] = eccX + TARG_WIN_SIZE_LARGE/2;
  TARG_WIN_ANTI_LARGE[UP]    = eccY - TARG_WIN_SIZE_LARGE/2;
  TARG_WIN_ANTI_LARGE[DOWN]  = eccY + TARG_WIN_SIZE_LARGE/2;

  // Setup CMD PAGES
  spawnwait CMD_PGS();
} /* SETC_TRL */
